OpenViBE-Scenario
Comment
  Global Settings

  There are three values you can modify
  in this box :

  VRPN Host :  Network name of the computer which will be
  running the SSVEP stimulator application. Usually this is
  executed on the machine running the designer.

  VRPN Port :  Port used for VRPN communication between
  the designer and the SSVEP stimulator application.

  Screen Refresh Rate :  The refresh rate of your screen,
  refer to your screen's user manual to find this value. Note that

Peripheral Settings
  Lua Script = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/scripts/configuration-peripheral-settings.lua
  VRPN Host = localhost
  VRPN Port = 1337
  Screen Refresh Rate = 60
-> 0xc67a01dc Experiment Settings
  Lua Script = /opt/openvibe/trunk/dist/share/openvibe-scenarios/bci/ssvep/scripts/configuration-experiment-settings.lua
  Target Light Color = 100,0,0
  Target Dark Colour = 0,0,0
  Stimulation Frequencies = 20;15;12
  Processing Epoch Duration = 0.75
  Processing Epoch Interval = 0.1
  Processing Frequency Tolerance = 0.250
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
