OpenViBE-Scenario
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Stimulator Start

  This SSVEP scenario needs to run along with
  an external application. The application is run
  automatically after the start of the scenario.
Comment
  Training Acquisition

  This scenario is used for acquiring the training data and has to be run
  first. Running the scenario will automatically call the SSVEP
  stimulator and wait until it is initialized. Before using this box please
  familiarize yourself with the experimental protocol.

  The main component is the SSVEP Training Controller box.
  This box takes several parameters which enable the operator to tune
  the training according to his needs.

  Goal Sequence - List of targets to stimulate. Each target is
  represented by a number. Targets 1, 2, 3 and 4 correspond to
  frequencies 20, 15, 12 and 10Hz respectively. Index 0 corresponds to
  neutral stimulation, when the subject is supposed to look in the
  middle of the screen.

  Stimulation Duration - Time, in seconds, during which the
  targets will be flashing during one cycle.

  Break Duration - Time, in seconds, between the series of
  stimulations. During this period, all targets are visible.

  Flickering Delay - Delay between the moment the goal
  indicator appears and the moment the targets begin to flicker.


  After the session the resulting file will be saved in [] and you will be
  able to proceed to the next phase : classifier training.
Comment
  Contrôle du stimulateur

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Channel selector => #1
  Channels list = CPz;Oz;O1;O2;POz;Iz
  Selection by index = false
Button VRPN Client
  Peripheral name = StartCommand@localhost:1337
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
-> SSVEP Training Controller => #3
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/training_stimulator.lua
  Goal sequence = 0 1 2 3 0 1 2 3 0 1 2 3
  Stimulation duration = 8
  Break duration = 4
  Flickering delay = 1
#3.Stimulations -> Identity => #4
Input 1=#4, Input 2=#4, Input 3=#4, Input 4=#4 -> Button VRPN Server "Control Buttons"
  Peripheral name = ControlButton
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#3.New output -> Identity => #6
Input 1=#6, Input 2=#6, Input 3=#6, Input 4=#6 -> Button VRPN Server "Goal Selection Buttons"
  Peripheral name = GoalButton
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
Input stimulations 1=#3.Stimulations, Input stimulations 2=#3.New output -> Stimulation multiplexer => #8
Input stream 2=#1, Input stream 3=#8 -> Generic stream writer
  Filename = ${Path_Samples}/signals/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = true

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/start_stimulation.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${Path_Bin}/OpenViBE-ssvep-demo-trainer${Shell_Extension}
