OpenViBE-Scenario
Comment
  Classifier Training

  After the training session, this scenario will process the recorded
  signal and train several classifiers. Each classifier works with one
  stimulation frequency and is capable to discern whether it is
  stimulated or not.

  All of the classifiers will be saved in []. If you want them to be saved
  in a different place, you should modify the paths in the three
  Classifier Trainer boxes.

  Training will begin automatically after the scenario finishes. You can
  verify classification rates in the terminal window.
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Processing chain

  The signal is processed in several stages :

  1. The signal is split by channels and two linear combinations are
  calculated : CPz - POz and 4 x Oz - (O1 + O2 + POz + Iz)

  2. For each stimulated frequency, both of these characteristics are
  split into parts where the frequency was stimulated and the rest.

  3. The signal is cut into windows of 1s every 100ms. The value of the
  signal is squared, averaged and square rooted.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal strea -> Identity => #1
-> Channel selector
  Channels list = CPz;POz
  Selection by index = false
-> Spatial Filter "CPz - POz" => #3
  Spatial filter coefficients = 1 -1
  Number of output channels = 1
  Number of input channels = 2
#1 -> Channel selector
  Channels list = Oz;O1;O2;POz;Iz
  Selection by index = false
-> Spatial Filter "4 x Oz - (O1 + O2 + POz + Iz)" => #5
  Spatial filter coefficients = 4 -1 -1 -1 -1
  Number of output channels = 1
  Number of input channels = 5
Input Signal 1=#3, Input Signal 2=#5 -> Signal Merger
-> Channel Rename => #7
  New channel names = Bipolar;Laplacian
-> Identity
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-${SSVEP_Frequency_3}Hz.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = ${SSVEP_EpochDuration}
  Epoch 1 intervals (in sec) = ${SSVEP_EpochInterval}
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #15
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-1
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#7 -> Identity
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-${SSVEP_Frequency_3}Hz.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = ${SSVEP_EpochDuration}
  Epoch 1 intervals (in sec) = ${SSVEP_EpochInterval}
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #23
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-2
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
#7 -> Identity
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Path_Samples}/bci/ssvep/configuration/temporal-filter-${SSVEP_Frequency_3}Hz.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = ${SSVEP_EpochDuration}
  Epoch 1 intervals (in sec) = ${SSVEP_EpochInterval}
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #31
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = ${Path_Samples}/bci/ssvep/classifiers/classifier-3
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
New input[0]=#15.Labels, New input[1]=#23.Labels, New input[2]=#31.Labels -> SSVEP Voter => #32
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/combination_classifier.lua
  Class count = 3
Input 1=#32, Input 2=#32, Input 3=#32 -> 0xc67a01dc Button VRPN Server "VRPN Ship Control"
  Peripheral name = SSVEP_VRPN_ShipControl
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02

Scenario Control => #34
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${SSVEP_VRPNServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#34.Output 1 -> Identity => #35
#34.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
VRPN Target Request
  Peripheral name = SSVEP_VRPN_TargetRequest@localhost:${SSVEP_VRPNServerPort}
  Button 1 ON = OVTK_StimulationId_Target
  Button 1 OFF = OVTK_StimulationId_NonTarget
-> SSVEP Shooter Controller => #38
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/shooter_stimulator.lua
  Target Sequence = 0 3 5 7 2 6 4 1
Input stimulations 1=#35, Input stimulations 2=#38 -> Stimulation multiplexer => #39
Input 1=#35, Input 2=#39, Input 3=#35, Input 4=#35 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
Input 1=#38, Input 2=#38, Input 3=#38, Input 4=#38, Input 5=#38, Input 6=#38, Input 7=#38, Input 8=#38 -> Button VRPN Server "VRPN Target Command"
  Peripheral name = SSVEP_VRPN_ShooterTarget
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
  Button 8 ON = OVTK_StimulationId_Label_07
  Button 8 OFF = OVTK_StimulationId_Label_07

Start Stimulation
  Lua Script = ${Path_Samples}/bci/ssvep/scripts/start_stimulation.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = OpenViBE-external-application-launcher${Shell_Extension} ${Program_Launcher_Prefix}ssvep-demo-shooter${Shell_Extension}
